PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'trigger': '1', 'n_reps_localizer': '12', 'n_reps_animalbreak_localizer': '3', 'n_reps_videobreak_localizer': '5', 'n_reps_sequence': '5', 'n_reps_animalbreak_sequence': '2', 'n_reps_videobreak_sequence': '2', 'n_reps_rest_cues': '5', 'n_reps_sequence_rest': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli\\conditions.xlsx', 'stimuli\\Videos\\dust.mov', 'stimuli\\Videos\\rainbows.mov', 'stimuli\\Videos\\stars.mov', 'stimuli\\Videos\\trees.mov', 'stimuli\\Face\\face_03s.jpg', 'stimuli\\Chair\\chair_12s.jpg', 'stimuli\\Apple\\apple_10s.jpg', 'stimuli\\Animals\\sheep1.jpg', 'stimuli\\Animals\\sheep1.wav']
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  expName = Replay_Things_v2021
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine rvsp_localizer
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    CodeComponent def_upd_variables_localizer
      Code Type = Py
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      Begin Experiment:
        current_trial_localizer = 0
        n_reps_localizer = expInfo['n_reps_localizer']
        n_reps_animalbreak_localizer = expInfo['n_reps_animalbreak_localizer']
        n_reps_videobreak_localizer = expInfo['n_reps_videobreak_localizer']
      Begin Routine:
        current_trial_localizer += 1
        if int(expInfo['trigger']) == 1:
            trigger_values_localizer = np.array([21, int(Loc_Trigger_Value_Image), int(Loc_Trigger_Value_Sound)])
        if int(expInfo['trigger']) == 2:
            trigger_values_localizer = np.array(['Onset', 'Img', 'Aud'])

        play_tone = True
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_localizer, trigger_timemap_localizer, trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_localizer, trigger_timemap_localizer, trigger_duration)
            if trigger_current != trigger_old:
                print(f'Localizer  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current

        if play_tone:
            tone_dict[Loc_Sound].play()
            play_tone = False
    ImageComponent image_localizer
      image [set every repeat] = $Loc_Image
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
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    TextComponent text_current_trial_rsvp_localizer
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.350
      text [set every repeat] = $current_trial_localizer
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  Routine attentioncatch_animal_localizer
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    CodeComponent write_trigger_animalbreak_localizer
      Code Type = Py
      Begin Routine:
        selection_trial_localizer += selection_trial_localizer.shape[0]
        rnd_idx = np.random.randint(animal_catch.shape[0])
      Each Frame:
        # Send Trigger
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([240, 249]), np.array([1.0, 4.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['AnimalBreak_Start','AnimalBreak_Stop']), np.array([0, 4.9]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Localizer  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    ImageComponent image_animal_localizer
      image [set every repeat] = $animal_catch[rnd_idx,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    SoundComponent sound_1
      sound [set every repeat] = $animal_catch[rnd_idx,1]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      volume = 0.2
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    TextComponent text_current_trial_animal_localizer
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $current_trial_localizer
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  Routine attentioncatch_video_localizer
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    CodeComponent write_trigger_videobreak_localizer
      Code Type = Py
      Begin Routine:
        rnd_idx = randint(video_catch.shape[0])

        # Start Video
        start_video = True
        #movie_dict[video_catch[rnd_idx]].setAutoDraw(True)
      Each Frame:
        # Send Trigger
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([230,239]), np.array([1.0,7.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['VideoBreak_Start','VideoBreak_Stop']), np.array([0,4.9]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Localizer  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current

        if start_video and (tThisFlip >= 1.0-frameTolerance):
            movie_dict[video_catch[rnd_idx]].setAutoDraw(True)
            start_video = False

        if not start_video and (tThisFlip >= 7.0-frameTolerance):
            movie_dict[video_catch[rnd_idx]].setAutoDraw(False)
      End Routine:
        # Stop Video
        #movie_dict[video_catch[rnd_idx]].setAutoDraw(False)
    TextComponent text_current_trial_video_localizer
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $current_trial_localizer
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  Routine rvsp_sequence
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    CodeComponent def_upd_variables_sequence
      Code Type = Py
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      Begin Experiment:
        current_trial_sequence = 0
        n_reps_sequence = expInfo['n_reps_sequence']
        n_reps_animalbreak_sequence = expInfo['n_reps_animalbreak_sequence']
        n_reps_videobreak_sequence = expInfo['n_reps_videobreak_sequence']
        n_reps_sequence_rest = expInfo['n_reps_sequence_rest']
      Begin Routine:
        current_trial_sequence += 1
        iti_duration_sequence = 0.3*np.random.rand() + 0.3
        if int(expInfo['trigger']) == 1:
            trigger_values_sequence = np.array([41, Seq_Trigger_Value_Image_1, Seq_Trigger_Value_Sound_1, 42, Seq_Trigger_Value_Image_2, Seq_Trigger_Value_Sound_2, 43, Seq_Trigger_Value_Image_3, Seq_Trigger_Value_Sound_3])
        if int(expInfo['trigger']) == 2:
            trigger_values_sequence = np.array(['Onset1','Img1','Aud1','Onset2','Img2','Aud2','Onset3','Img3','Aud3'])

        play_tone1 = True
        play_tone2 = True
        play_tone3 = True
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_sequence, trigger_timemap_sequence, trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_sequence, trigger_timemap_sequence, trigger_duration)
            if trigger_current != trigger_old:
                print(f'Sequence  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current

        if play_tone1 and tThisFlip >= 0.0-frameTolerance:
            tone_dict[Seq_Sound_1].play()
            play_tone1 = False

        if play_tone2 and tThisFlip >= 0.35-frameTolerance:
            tone_dict[Seq_Sound_2].play()
            play_tone2 = False

        if play_tone3 and tThisFlip >= 0.7-frameTolerance:
            tone_dict[Seq_Sound_3].play()
            play_tone3 = False
    ImageComponent image_1_sequence
      image [set every repeat] = $Seq_Image_1
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
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    ImageComponent image_2_sequence
      image [set every repeat] = $Seq_Image_2
      size = (0.7, 0.7)
      startVal [time (s)] = 0.350
      stopVal [duration (s)] = 0.250
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    ImageComponent image_3_sequence
      image [set every repeat] = $Seq_Image_3
      size = (0.7, 0.7)
      startVal [time (s)] = 0.70
      stopVal [duration (s)] = 0.25
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    TextComponent text_current_trial_rsvp_sequence
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.05
      text [set every repeat] = $current_trial_sequence
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  Routine iti_sequence
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    TextComponent text_current_trial_iti_sequence
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration_sequence
      text [set every repeat] = $current_trial_sequence
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  Routine attentioncatch_animal_sequence
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    CodeComponent write_trigger_animalbreak_sequence
      Code Type = Py
      Begin Routine:
        selection_trial_sequence += selection_trial_sequence.shape[0]
        rnd_idx = np.random.randint(animal_catch.shape[0])
      Each Frame:
        # Send Trigger
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([240, 249]), np.array([1.0,4.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['AnimalBreak_Start','AnimalBreak_Stop']), np.array([0,4.9]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Sequence  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    ImageComponent image_animal_sequence
      image [set every repeat] = $animal_catch[rnd_idx,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    SoundComponent sound_animal_localizer
      sound [set every repeat] = $animal_catch[rnd_idx,1]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_current_trial_animal_sequence
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $current_trial_sequence
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  Routine attentioncatch_video_sequence
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    CodeComponent write_trigger_videobreak_sequence
      Code Type = Py
      Begin Routine:
        rnd_idx = randint(video_catch.shape[0])

        # Start Video
        start_video = True
        #movie_dict[video_catch[rnd_idx]].setAutoDraw(True)
      Each Frame:
        # Send Trigger
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([230, 239]), np.array([1.0, 7.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['VideoBreak_Start','VideoBreak_Stop']), np.array([0, 4.9]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Sequence  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current

        if start_video and (tThisFlip >= 1.0-frameTolerance):
            movie_dict[video_catch[rnd_idx]].setAutoDraw(True)
            start_video = False

        if not start_video and (tThisFlip >= 7.0-frameTolerance):
            movie_dict[video_catch[rnd_idx]].setAutoDraw(False)
      End Routine:
        # Stop Video
        #movie_dict[video_catch[rnd_idx]].setAutoDraw(False)
    TextComponent text_current_trial_video_sequence
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $current_trial_sequence
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  Routine start_localizer
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    TextComponent text_start_localizer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start Localizer with SPACE!
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    KeyboardComponent keyb_start_localizer
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_sequence
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    TextComponent text_start_sequence
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start Sequence Learning and Resting Phase with SPACE!
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    KeyboardComponent keyb_start_sequence
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_resting
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    CodeComponent def_upd_blank_resting
      Code Type = Py
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      Begin Experiment:
        current_trial_resting = 0
        n_reps_rest_cues = expInfo['n_reps_rest_cues']
      Begin Routine:
        current_trial_resting += 1
        current_duration_resting = 3.0 + 2.0*np.random.rand()
    TextComponent text_current_trial_blank_resting
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_duration_resting
      text [set every repeat] = $current_trial_resting
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  Routine cue_resting
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    CodeComponent write_trigger_cue_resting
      Code Type = Py
      Begin Routine:
        if int(expInfo['trigger']) == 1:
            trigger_values_resting = np.array([61, 152])
        if int(expInfo['trigger']) == 2:
            trigger_values_resting = np.array(['Cue', 'Aud'])

        play_tone = True
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_resting, trigger_timemap_resting, trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, trigger_values_resting, trigger_timemap_resting, trigger_duration)
            if trigger_current != trigger_old:
                print(f'Resting  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current

        if play_tone:
            tone_dict[240].play()
            play_tone = False
    TextComponent text_current_trial_cue_resting
      letterHeight = 0.03
      pos = current_trial_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $current_trial_resting
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  Routine start_resting
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    CodeComponent init_trigger_start_resting
      Code Type = Py
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([60]), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Start_Resting']), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Resting  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_start_resting
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Resting Phase starts...
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  Routine stop_resting
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    CodeComponent init_trigger_stop_resting
      Code Type = Py
      Each Frame:
        # Send Trigger
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([69]), np.array([0.5]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Stop_Resting']), np.array([0.5]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Resting  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_end_resting
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Resting Phase ends...
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  Routine init_vars
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    CodeComponent initialize_vars_funs
      Code Type = Py
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      Begin Experiment:
        from import_stimuli import create_cond_file_stim_pair

        condition_file_localizer, condition_file_sequence, animal_catch, video_catch = create_cond_file_stim_pair(expInfo['participant'], int(expInfo['n_reps_localizer']), int(expInfo['n_reps_animalbreak_localizer'])*int(expInfo['n_reps_videobreak_localizer']), int(expInfo['n_reps_sequence']), int(expInfo['n_reps_sequence_rest'])*int(expInfo['n_reps_animalbreak_sequence'])*int(expInfo['n_reps_videobreak_sequence']))
        selection_trial_localizer = np.arange(int(expInfo['n_reps_localizer']))
        selection_trial_sequence = np.arange(int(expInfo['n_reps_sequence']))

        # Display Position of Current Trial
        current_trial_position = (-0.80, -0.45)

        # Trigger Function
        def get_current_trigger_value(t, values, timemap, duration):
            trigger_value = 0
            position_bool = (t >= timemap) * (t < (timemap + duration))
            if np.any(position_bool):
                trigger_value = values[position_bool][0]
            if isinstance(values[0],str):
                return trigger_value
            else:
                return int(trigger_value)

        # Trigger Value Memory
        trigger_old = 0

        # Trigger Duration
        trigger_duration = 0.040 # seconds

        # Trigger Time Mappings
        trigger_timemap_localizer = np.array([0,0.08,0.16])-frameTolerance # seconds
        trigger_timemap_sequence = np.array([0,0.08,0.16,0.35,0.43,0.51,0.70,0.78,0.86])-frameTolerance # seconds
        trigger_timemap_resting = np.array([0,0.08])-frameTolerance # seconds

        # Initialize Parallel Port
        if int(expInfo['trigger']) == 1:
            from psychopy import parallel
            p_port = parallel.ParallelPort(address='0x0378')


        tone_dict = dict()
        for i in [240, 440, 640]:
            tone_dict[i] = sound.Sound(i, # 600,1000
                                       volume=0.2, # new: less loud than the catchers
                                       autoLog=False, # avoid Soundcard overflow on Argentinien computer
                                       secs=0.25, # time adjust by experiment
                                       sampleRate=44100, stereo=True # sample rate ignored because already set
                                       )

        # Initialize Videos
        movie_dict = dict()
        for path in video_catch:
            movie_dict[path] = visual.MovieStim3(
                                                win=win, name=path,
                                                noAudio = False,
                                                filename=path,
                                                volume=0.2,
                                                ori=0.0, pos=(0, 0), opacity=None,
                                                loop=False,
                                                depth=-2.0,
                                            )
            movie_dict[path].setAutoDraw(False)
    TextComponent text_init_vars_blank
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trigger_start_localizer
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    CodeComponent init_trigger_start_localizer
      Code Type = Py
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([20]), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Start_Localizer']), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Localizer  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_trigger_start_localizer_blank
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trigger_stop_localizer
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    CodeComponent init_trigger_stop_localizer
      Code Type = Py
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([29]), np.array([3.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Stop_Localizer']), np.array([3.0]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Localizer  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_trigger_stop_localizer_blank
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine trigger_start_sequence
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    CodeComponent init_trigger_start_sequence
      Code Type = Py
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([40]), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Start_Sequence']), np.array([0.0]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Sequence  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_trigger_start_sequence_blank
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine trigger_stop_sequence
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    CodeComponent init_trigger_stop_sequence
      Code Type = Py
      Each Frame:
        if int(expInfo['trigger']) == 1:
            trigger_current = get_current_trigger_value(tThisFlip, np.array([49]), np.array([2.0]), trigger_duration)
            if trigger_current != trigger_old:
                win.callOnFlip(p_port.setData, trigger_current)
            trigger_old = trigger_current

        if int(expInfo['trigger']) == 2:
            trigger_current = get_current_trigger_value(tThisFlip, np.array(['Stop_Sequence']), np.array([2.0]), trigger_duration)
            if trigger_current != trigger_old:
                print(f'Sequence  ---  Time: {1000*tThisFlip:5.2f}  ---  Trigger Value: {trigger_current}')
            trigger_old = trigger_current
    TextComponent text_trigger_stop_sequence_blank
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_screen
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    TextComponent text_end_screen
      letterHeight = 0.1
      startVal [time (s)] = 4.0
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      text:
        The experiment is now finished.
        Thank you for your participation! :)
    KeyboardComponent keyb_end_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
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Flow
  Routine init_vars
  Routine start_localizer
  Routine trigger_start_localizer
  LoopInitiator loop_videobreak_localizer loopType="TrialHandler"
    loopType = sequential
    nReps = n_reps_videobreak_localizer
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    LoopInitiator loop_animalbreak_localizer loopType="TrialHandler"
      loopType = sequential
      nReps = n_reps_animalbreak_localizer
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      LoopInitiator loop_rvsp_localizer loopType="TrialHandler"
        Selected rows = $selection_trial_localizer.tolist()
        conditionsFile = $condition_file_localizer
        loopType = sequential
        nReps = 1
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        Routine rvsp_localizer
      LoopTerminator loop_rvsp_localizer
      Routine attentioncatch_animal_localizer
    LoopTerminator loop_animalbreak_localizer
    Routine attentioncatch_video_localizer
  LoopTerminator loop_videobreak_localizer
  Routine trigger_stop_localizer
  Routine start_sequence
  LoopInitiator loop_repeat_sequence_rest loopType="TrialHandler"
    loopType = sequential
    nReps = n_reps_sequence_rest
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    Routine trigger_start_sequence
    LoopInitiator loop_videobreak_sequence loopType="TrialHandler"
      loopType = sequential
      nReps = n_reps_videobreak_sequence
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      LoopInitiator loop_animalbreak_sequence loopType="TrialHandler"
        loopType = sequential
        nReps = n_reps_animalbreak_sequence
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        LoopInitiator loop_rvsp_sequence loopType="TrialHandler"
          Selected rows = $selection_trial_sequence.tolist()
          conditionsFile = $condition_file_sequence
          loopType = sequential
          nReps = 1
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          Routine rvsp_sequence
          Routine iti_sequence
        LoopTerminator loop_rvsp_sequence
        Routine attentioncatch_animal_sequence
      LoopTerminator loop_animalbreak_sequence
      Routine attentioncatch_video_sequence
    LoopTerminator loop_videobreak_sequence
    Routine trigger_stop_sequence
    Routine start_resting
    LoopInitiator loop_cue_resting loopType="TrialHandler"
      loopType = sequential
      nReps = n_reps_rest_cues
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      Routine blank_resting
      Routine cue_resting
    LoopTerminator loop_cue_resting
    Routine stop_resting
  LoopTerminator loop_repeat_sequence_rest
  Routine end_screen
